PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Msk_leg
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Instructions
    TextComponent Instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Вам будут продемонстрированы стимулы.
        Во время показа видео Вам не следует повторять движение.
        Когда увидете сообщение "Приготовьтесь...", подготовьтесь к повторению движения в соответствие с указанными командами.

        Нажмите "пробел" для продолжения
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        # Run 'Before Experiment' code from LSL_server
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('MyMarkerStream', 'Events', 1, 0, 'string', 'id43536');
        outlet = StreamOutlet(info)
  Routine ready
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Приготовьтесь
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  Routine Task
    MovieComponent STIM
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    TextComponent Move
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $movement
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  Routine MOVEMENT
    TextComponent Actual_task
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $mvmnt
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    TextComponent LSL_send
      letterHeight = 0.01
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimuli_id
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        '''
        PYLSL part
        '''
        #outlet.push_sample(f'{stimuli_id}')
  Routine Thanks
    TextComponent THX
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Сообщите сотруднику о том, что эксперимент завершён

        Спасибо

        Нажмите "пробел" для выхода из приложения
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator Block loopType="TrialHandler"
    conditionsFile = Move_MSK.xlsx
    isTrials = False
    loopType = sequential
    nReps = 2
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    conditions:
      [{'stimuli_id': 1, 'movement': 'Сгибание стопы', 'video': 'Work_files\\video\\Forw.mp4', 'task': 'Совершите движение', 'xlsx': 'Work_files\\xlsx\\Forw.xlsx'},
      {'stimuli_id': 2, 'movement': 'Сгибание колена', 'video': 'Work_files\\video\\Kneel.mp4', 'task': 'Совершите движение', 'xlsx': 'Work_files\\xlsx\\Kneel.xlsx'},
      {'stimuli_id': 3, 'movement': 'Поворот стопы', 'video': 'Work_files\\video\\Flex.mp4', 'task': 'Совершите движение', 'xlsx': 'Work_files\\xlsx\\Flex.xlsx'},
      {'stimuli_id': 4, 'movement': 'Движение пальцев', 'video': 'Work_files\\video\\Fingers.mp4', 'task': 'Совершите движение', 'xlsx': 'Work_files\\xlsx\\Fingers.xlsx'},
      {'stimuli_id': 5, 'movement': 'В покое', 'video': 'Work_files\\video\\Neutr.mp4', 'task': 'Расслабьтесь', 'xlsx': 'Work_files\\xlsx\\Neutr.xlsx'}]
    Routine ready
    Routine Task
    Routine ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $xlsx
      loopType = sequential
      nReps = 1
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      Routine MOVEMENT
    LoopTerminator trials
  LoopTerminator Block
  Routine Thanks
